PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  color = 0.5000, 0.5000, 0.5000
  expName = OverthinkingModel
  frameRateMsg = Loading
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine MazeRoutine
    RoutineSettingsComponent MazeRoutine
      stopVal [condition] = skip_routine
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    CodeComponent Maze_Code
      Code Type = Py
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      Begin Experiment:
        import random

        # Colors
        WALL_COLOR = (-.4, -.4, -.4)  # Dark Gray
        PATH_COLOR = (.7, .7, .7)     # white
        AGENT_COLOR = (-1, -1, 1)  # blue
        GOAL_COLOR = (1, -1, -1)   # red

        class Maze:
            def __init__(self, size=8):
                self.size = size
                self.maze = [[1] * (2 * size + 1) for _ in range(2 * size + 1)]
                self.visited = set([])
                self.goal_location = None
                self.agent_location = None
                self.walls = set([])
                self.goal_reached = False

            def generate_maze(self):
                start = (random.randint(0, self.size - 1) * 2 + 1, random.randint(0, self.size - 1) * 2 + 1)
                self.maze[start[1]][start[0]] = 0
                self.walk_maze(start)

                for x in range(1, self.size * 2, 2):
                    for y in range(1, self.size * 2, 2):
                        self.walls.add((x, y))

                for _ in range(4):
                    if not self.walls:
                        break
                    wall = random.choice(list(self.walls))
                    self.maze[wall[1]][wall[0]] = 0
                    self.walls.remove(wall)

                self.goal_location = [(self.size - 1) * 2 + 1, (self.size - 1) * 2 + 1]

                while True:
                    agent_start = [1, 1]
                    if agent_start != self.goal_location:
                        self.agent_location = agent_start
                        break

                return self.maze

            def walk_maze(self, s):
                self.visited.add(s)
                neighbors = self.neighbors(s)
                random.shuffle(neighbors)

                for n in neighbors:
                    if n not in self.visited:
                        self.remove_wall(s, n)
                        self.walk_maze(n)

            def neighbors(self, s):
                x, y = s
                potential_neighbors = [(x-2, y), (x+2, y), (x, y-2), (x, y+2)]

                neighbors = []
                for n in potential_neighbors:
                    nx, ny = n
                    if 0 <= nx < self.size * 2 + 1 and 0 <= ny < self.size * 2 + 1:
                            neighbors.append((nx, ny))

                return neighbors

            def remove_wall(self, s, n):
                sx, sy = s
                nx, ny = n

                if sx == nx:  # Vertical neighbors
                    wall_pos = (sx, min(sy, ny) + 1)
                    self.maze[wall_pos[1]][wall_pos[0]] = 0  # Remove horizontal wall
                elif sy == ny:  # Horizontal neighbors
                    wall_pos = (min(sx, nx) + 1, sy)
                    self.maze[wall_pos[1]][wall_pos[0]] = 0  # Remove vertical wall

                self.maze[ny][nx] = 0  # Mark the new cell as a path
                self.walls.discard(wall_pos)

            def teleport_agent(self):
                # Teleport agent to a random location, excluding the goal location
                while True:
                    random_location = (random.randint(0, self.size - 1) * 2 + 1, random.randint(0, self.size - 1) * 2 + 1)
                    if random_location != self.goal_location:
                        return random_location

            def move_agent(self, key, pos):
                new_pos = pos[:]
                if key == 'up':
                    new_pos[1] += 1
                elif key == 'down':
                    new_pos[1] -= 1
                elif key == 'left':
                    new_pos[0] -= 1
                elif key == 'right':
                    new_pos[0] += 1

                c1 = 0 <= new_pos[1] < self.size*2
                c2 = 0 <= new_pos[0] < self.size*2

                if c1 and c2:
                    if self.maze[new_pos[1]][new_pos[0]] == 0:
                        self.agent_location = new_pos
                        if self.agent_location == self.goal_location:
                            self.goal_reached = True
                else:
                    self.agent_location = pos


            def draw_maze(self):
                rects = []
                for y in range(len(self.maze)):
                    for x in range(len(self.maze[0])):
                        color = WALL_COLOR if self.maze[y][x] == 1 else PATH_COLOR
                        rect = visual.Rect(win, width=cell_size, height=cell_size, fillColor=color, interpolate=True)
                        rect.pos = [x * cell_size - (self.size * cell_size), y * cell_size - (self.size * cell_size)]
                        rects.append(rect)
                return rects

            def draw_agent(self):
                # Draw the agent
                ax, ay = self.agent_location
                agent = visual.Circle(win, radius=cell_size * player_size / 2, fillColor=AGENT_COLOR)
                if self.goal_reached:
                    agent.fillColor = 'yellow'
                agent.pos = [ax * cell_size - (self.size * cell_size), ay * cell_size - (self.size * cell_size)]
                agent.draw()

                # Draw the goal
                if not self.goal_reached:
                    gx, gy = self.goal_location
                    goal = visual.Rect(win, width=cell_size, height=cell_size, fillColor=GOAL_COLOR)
                    goal.pos = [gx * cell_size - (self.size * cell_size), gy * cell_size - (self.size * cell_size)]
                    goal.draw()
      Begin Routine:
        # Initialize the maze
        maz = Maze(size=11)
        maz.generate_maze()

        # Set the size of the cells
        cell_size = .4/maz.size
        player_size = .9

        pressed_keys = []

        maze_cells = maz.draw_maze()
        for cell in maze_cells:
            cell.draw()

        Timer = visual.TextStim(win=win, name='Timer',
                text='0',
                font='Arial',
                pos=(0, .45), draggable=False, height=0.05, wrapWidth=None, ori=0.0,
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=-1.0);

        Overlay = visual.Rect(
                win=win, name='Overlay',
                width=(.9, .9)[0], height=(.5, .5)[1],
                ori=0.0, pos=(0, 0), draggable=False, anchor='center',
                lineWidth=1.0,
                colorSpace='rgb', lineColor='white', fillColor='green',
                opacity=0.6, depth=-2.0, interpolate=True)

        Countdown = False
        skip_routine = False
      Each Frame:
        t = routineTimer.getTime()
        if not maz.goal_reached and t < 20:
            keys = event.getKeys()
            for key in keys:
                maz.move_agent(key, maz.agent_location)
                break

            for cell in maze_cells:
                cell.draw()
            maz.draw_agent()
            Timer.setText(str(round(t)), log=False)
            Timer.draw()

        else:
            if not Countdown:
                ts = t
                Countdown = True

            for cell in maze_cells:
                cell.draw()
            maz.draw_agent()

            if not maz.goal_reached:
                Overlay.fillColor = 'red'
                Overlay.opacity = 0.6
            Overlay.draw()

            text = 'Success!' if maz.goal_reached else 'Time Over!'
            Timer.setText(text)
            Timer.pos = (0.0)
            Timer.draw()

            if t - ts >= 2:
                skip_routine = True
    PolygonComponent Maze_timer
      fillColor = white
      opacity = 0
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
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  Routine welcome
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    TextComponent Welcome
      color = Black
      font = Arial Bold
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Thank you for participating
        in our experiment
  Routine questionnaire
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    ImageComponent questionsimages
      image [set every repeat] = $questions_images
      pos = (0, .3)
      size = (1.2, 0.2)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = 0,1,2,3,4
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0,1, 2, 3, 4)
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    KeyboardComponent next
      allowedKeys [set every repeat] = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine wait_for_maze
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    TextComponent maze_explanation
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the next part you are expected to solve 10 mazes in the given time.
        you can move your charachter with arrow keys.

        press SPACE when ready
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait_a_sec
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    TextComponent loading
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = Loading
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Flow
  Routine welcome
  LoopInitiator questionnaires_trials loopType="TrialHandler"
    conditionsFile = questioner.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'questions_images': 'que/q1.png'},
      {'questions_images': 'que/q2.png'},
      {'questions_images': 'que/q3.png'},
      {'questions_images': 'que/q4.png'},
      {'questions_images': 'que/q5.png'},
      {'questions_images': 'que/q6.png'},
      {'questions_images': 'que/q7.png'},
      {'questions_images': 'que/q8.png'},
      {'questions_images': 'que/q9.png'},
      {'questions_images': 'que/q10.png'},
      {'questions_images': 'que/q11.png'},
      {'questions_images': 'que/q12.png'},
      {'questions_images': 'que/q13.png'},
      {'questions_images': 'que/q14.png'},
      {'questions_images': 'que/q15.png'}]
    Routine questionnaire
  LoopTerminator questionnaires_trials
  Routine wait_for_maze
  Routine wait_a_sec
  LoopInitiator maze_trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine MazeRoutine
  LoopTerminator maze_trials
