PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = 0.5000, 0.5000, 0.5000
  expName = OverthinkingModel
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine MazeRoutine
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    CodeComponent MazeCode
      Code Type = Py
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      Begin Routine:
        import random

        class Maze:
            def __init__(self, size=8):
                self.size = size
                self.maze = [[1] * (2 * size + 1) for _ in range(2 * size + 1)]
                self.visited = set([])
                self.goal_location = None
                self.agent_location = None
                self.walls = set([])

            def generate_maze(self):
                start = (random.randint(0, self.size - 1) * 2 + 1, random.randint(0, self.size - 1) * 2 + 1)
                self.maze[start[1]][start[0]] = 0
                self.walk_maze(start)

                for x in range(1, self.size * 2, 2):
                    for y in range(1, self.size * 2, 2):
                        self.walls.add((x, y))

                for _ in range(4):
                    if not self.walls:
                        break
                    wall = random.choice(list(self.walls))
                    self.maze[wall[1]][wall[0]] = 0
                    self.walls.remove(wall)

                self.goal_location = [random.randint(0, self.size - 1) * 2 + 1, random.randint(0, self.size - 1) * 2 + 1]

                while True:
                    agent_start = [random.randint(0, self.size - 1) * 2 + 1, random.randint(0, self.size - 1) * 2 + 1]
                    if agent_start != self.goal_location:
                        self.agent_location = agent_start
                        break

                return self.maze

            def walk_maze(self, s):
                self.visited.add(s)
                neighbors = self.neighbors(s)
                random.shuffle(neighbors)

                for n in neighbors:
                    if n not in self.visited:
                        self.remove_wall(s, n)
                        self.walk_maze(n)

            def neighbors(self, s):
                x, y = s
                potential_neighbors = [(x-2, y), (x+2, y), (x, y-2), (x, y+2)]

                neighbors = []
                for n in potential_neighbors:
                    nx, ny = n
                    if 0 <= nx < self.size * 2 + 1 and 0 <= ny < self.size * 2 + 1:
                            neighbors.append((nx, ny))

                return neighbors

            def remove_wall(self, s, n):
                sx, sy = s
                nx, ny = n

                if sx == nx:  # Vertical neighbors
                    wall_pos = (sx, min(sy, ny) + 1)
                    self.maze[wall_pos[1]][wall_pos[0]] = 0  # Remove horizontal wall
                elif sy == ny:  # Horizontal neighbors
                    wall_pos = (min(sx, nx) + 1, sy)
                    self.maze[wall_pos[1]][wall_pos[0]] = 0  # Remove vertical wall

                self.maze[ny][nx] = 0  # Mark the new cell as a path
                self.walls.discard(wall_pos)

            def teleport_agent(self):
                # Teleport agent to a random location, excluding the goal location
                while True:
                    random_location = (random.randint(0, self.size - 1) * 2 + 1, random.randint(0, self.size - 1) * 2 + 1)
                    if random_location != self.goal_location:
                        return random_location

        # Colors
        WALL_COLOR = (-.4, -.4, -.4)  # Dark Gray
        PATH_COLOR = (.7, .7, .7)     # white
        AGENT_COLOR = (-1, -1, 1)  # blue
        GOAL_COLOR = (1, -1, -1)   # red



        # Initialize the maze
        maze = Maze(size=10)
        maze.generate_maze()

        # Set the size of the cells
        cell_size = .4/maze.size
        player_size = .9

        def draw_maze():
            for y in range(len(maze.maze)):
                for x in range(len(maze.maze[0])):
                    color = WALL_COLOR if maze.maze[y][x] == 1 else PATH_COLOR
                    rect = visual.Rect(win, width=cell_size, height=cell_size, fillColor=color)
                    rect.pos = [x * cell_size - (maze.size * cell_size), y * cell_size - (maze.size * cell_size)]
                    rect.draw()

            # Draw the agent
            ax, ay = maze.agent_location
            agent = visual.Circle(win, radius=cell_size * player_size / 2, fillColor=AGENT_COLOR)
            agent.pos = [ax * cell_size - (maze.size * cell_size), ay * cell_size - (maze.size * cell_size)]
            agent.draw()

            # Draw the goal
            gx, gy = maze.goal_location
            goal = visual.Rect(win, width=cell_size, height=cell_size, fillColor=GOAL_COLOR)
            goal.pos = [gx * cell_size - (maze.size * cell_size), gy * cell_size - (maze.size * cell_size)]
            goal.draw()

        def move_agent(key, pos):
            new_pos = pos[:]
            if key == 'up':
                new_pos[1] += 1
            elif key == 'down':
                new_pos[1] -= 1
            elif key == 'left':
                new_pos[0] -= 1
            elif key == 'right':
                new_pos[0] += 1

            c1 = 0 <= new_pos[1] < maze.size
            c2 = 0 <= new_pos[0] < maze.size
            if c1 and c2:
                if maze.maze[new_pos[1]][new_pos[0]] == 0:
                    return new_pos
            return pos
        pressed_keys = []
      Each Frame:
        keys = event.getKeys()

        for key in keys:
            maze.agent_location = move_agent(key, maze.agent_location)

        win.clearBuffer()
        draw_maze()
    TextComponent Timer
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = timer
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine MazeRoutine
  LoopTerminator trials
