PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = game
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    CodeComponent maze_game
      Code Type = Auto->JS
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      Before Experiment:
        # Before Experiment

        import random
        from psychopy import visual, event, core

        # Colors
        WALL_COLOR = (-1, -1, -1)  # black
        PATH_COLOR = (1, 1, 1)     # white
        AGENT_COLOR = (-1, -1, 1)  # blue
        GOAL_COLOR = (1, -1, -1)   # red

        # Maze class definition here
        class Maze:
            def __init__(self, size=8):
                self.size = size
                self.maze = [[1] * (2 * size + 1) for _ in range(2 * size + 1)]
                self.visited = set()
                self.goal_location = None
                self.agent_location = None
                self.walls = set()

            def generate_maze(self):
                start = (random.randint(0, self.size - 1) * 2 + 1, random.randint(0, self.size - 1) * 2 + 1)
                self.maze[start[1]][start[0]] = 0
                self.walk_maze(start)

                for x in range(1, self.size * 2, 2):
                    for y in range(1, self.size * 2, 2):
                        self.walls.add((x, y))

                for _ in range(4):
                    if not self.walls:
                        break
                    wall = random.choice(list(self.walls))
                    self.maze[wall[1]][wall[0]] = 0
                    self.walls.remove(wall)

                self.goal_location = (random.randint(0, self.size - 1) * 2 + 1, random.randint(0, self.size - 1) * 2 + 1)

                while True:
                    agent_start = (random.randint(0, self.size - 1) * 2 + 1, random.randint(0, self.size - 1) * 2 + 1)
                    if agent_start != self.goal_location:
                        self.agent_location = agent_start
                        break

                return self.maze

            def walk_maze(self, s):
                self.visited.add(s)
                neighbors = self.neighbors(s)
                random.shuffle(neighbors)

                for n in neighbors:
                    if n not in self.visited:
                        self.remove_wall(s, n)
                        self.walk_maze(n)

            def neighbors(self, s):
                x, y = s
                potential_neighbors = [(x-2, y), (x+2, y), (x, y-2), (x, y+2)]  # همسایه‌های پتانسیل

                neighbors = []
                for n in potential_neighbors:
                    nx, ny = n
                    if 0 <= nx < self.size * 2 + 1 and 0 <= ny < self.size * 2 + 1:
                    # بررسی می‌کند که همسایه‌ها داخل محدوده ماز هستند
                        neighbors.append((nx, ny))

                return neighbors  # بازگرداندن لیستی از همسایه‌ها

            def remove_wall(self, s, n):
                # Definition of remove_wall function
                pass

            # Other functions (generate_maze, move_agent, etc.) go here
      Begin Experiment:
        # Begin Experiment

        # Create a window
        win = visual.Window([800, 600], fullscr=False, color=PATH_COLOR)

        # Initialize the maze
        maze = Maze(size=8)
        maze.generate_maze()

        # Set the size of the cells
        cell_size = 40

        # Clock to control the frame rate
        clock = core.Clock()
      Begin Routine:
        # Begin Routine

        # Clear any prior events
        event.clearEvents()

        # Draw the initial maze and agent
        def draw_maze():
            for y in range(len(maze.maze)):
                for x in range(len(maze.maze[0])):
                    color = WALL_COLOR if maze.maze[y][x] == 1 else PATH_COLOR
                    rect = visual.Rect(win, width=cell_size, height=cell_size, fillColor=color)
                    rect.pos = [x * cell_size - (maze.size * cell_size), y * cell_size - (maze.size * cell_size)]
                    rect.draw()

            # Draw the agent
            ax, ay = maze.agent_location
            agent = visual.Circle(win, radius=cell_size / 2, fillColor=AGENT_COLOR)
            agent.pos = [ax * cell_size - (maze.size * cell_size), ay * cell_size - (maze.size * cell_size)]
            agent.draw()

            # Draw the goal
            gx, gy = maze.goal_location
            goal = visual.Rect(win, width=cell_size, height=cell_size, fillColor=GOAL_COLOR)
            goal.pos = [gx * cell_size - (maze.size * cell_size), gy * cell_size - (maze.size * cell_size)]
            goal.draw()

        # Initial maze drawing
        draw_maze()
        win.flip()
      Each Frame:
        # Each Frame

        # Get the pressed keys
        keys = event.getKeys()

        # Move agent based on key press
        if 'w' in keys:
            maze.move_agent('up')
        elif 's' in keys:
            maze.move_agent('down')
        elif 'a' in keys:
            maze.move_agent('left')
        elif 'd' in keys:
            maze.move_agent('right')

        # Redraw the maze and agent in the new position
        draw_maze()
        win.flip()

        # Check if agent has reached the goal
        if maze.agent_location == maze.goal_location:
            thisExp.addData('goal_reached', True)
            continueRoutine = False  # End the current routine
      End Experiment:
        # End Experiment

        # Close the window
        win.close()

        # Quit PsychoPy
        core.quit()
      End Routine:
        # End Routine

        # Log the final position of the agent
        thisExp.addData('final_agent_position', maze.agent_location)
        thisExp.addData('goal_position', maze.goal_location)
Flow
  Routine trial
